PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data_PsychoPy/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'S000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, 0.0902, 0.0902
  expName = OV2024_experiment
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent text_intro
      color = black
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = EEG recording
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    PolygonComponent circle
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 6
      ori = 45
      pos = (0, 0.05)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_block
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block
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    TextComponent text_condition
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition
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    MouseComponent mouse_intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine intro_RS
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    TextComponent text_RS
      letterHeight = 0.1
      pos = (0, -0)
      startVal [time (s)] = 0.0
      text [set every repeat] = resting-state EEG
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    MouseComponent mouse_RS
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = 45
      shape = cross
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_fixation
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine rating_quality
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    TextComponent quality_text
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tuve una sensación ...
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    PolygonComponent nothing
      fillColor = black
      lineColor = black
      pos = (0, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent nothing_text
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = nada
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    PolygonComponent touch
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.6, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent touch_text
      letterHeight = 0.045
      pos = (-0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de tacto
        ligero
    PolygonComponent pricking
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent pricking_text
      letterHeight = 0.05
      pos = (-0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = punzante
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    PolygonComponent tingling
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent tingling_text
      letterHeight = 0.045
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de
        cosquilleo
    PolygonComponent itchy
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent itchy_text
      letterHeight = 0.05
      pos = (0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = de picazón
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    PolygonComponent warm
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.6, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent warm_text
      letterHeight = 0.05
      pos = (0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = caliente
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    PolygonComponent pinching
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.6, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent pinching_text
      letterHeight = 0.045
      pos = (-0.6, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = de pellizco
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    PolygonComponent piercing
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.3, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent piercing_text
      letterHeight = 0.05
      pos = (-0.3, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = penetrante
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    PolygonComponent electric
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent electric_text
      letterHeight = 0.045
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de
        electricidad
    PolygonComponent burning_ch
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.3, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent burning_ch_text
      letterHeight = 0.05
      pos = (0.3, -0.05)
      startVal [time (s)] = 0.0
      text = de ardor
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    PolygonComponent burning_t
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.6, -0.05)
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent burning_t_text
      letterHeight = 0.05
      pos = (0.6, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = quemante
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    TextComponent pain_text
      letterHeight = 0.06
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Si sentía dolor, fue ...
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    PolygonComponent mild
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (-0.35, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent mild_text
      color = black
      letterHeight = 0.05
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        leve
    PolygonComponent medium
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (0.0, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent medium_text
      color = black
      letterHeight = 0.05
      pos = (0.0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        moderado
    PolygonComponent intense
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (0.35, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent intense_text
      color = black
      letterHeight = 0.05
      pos = (0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        intenso
    PolygonComponent next_quality
      fillColor = white
      ori = 90
      pos = (0.7, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.12, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent next_quality_text
      color = black
      letterHeight = 0.04
      pos = (0.7, -0.4)
      startVal [time (s)] = 0.0
      text = next
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable = name, color
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_quality
      Code Type = Auto->JS
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      Begin Experiment:
        # define choice lists
        choices_quality = [nothing, touch, pricking, tingling, itchy, warm, pinching, piercing, electric, burning_ch, burning_t]
        choices_intensity = [mild, medium, intense]
      Begin Routine:
        # launch variables that will change
        clicked_quality = []
        clicked_intensity = []
        time_trial = []
      Each Frame:
        # check if the mouse is pressed in any quality box
        for choice in choices_quality:
            if mouse.isPressedIn(choice):
                if choice.name in clicked_quality:
                    clicked_quality.remove(choice.name)
                    choice.color = 'black'
                else:
                    clicked_quality.append(choice.name)
                    choice.color = 'red'

        # check if the mouse is pressed in any intensity box
        for choice in choices_intensity:
            if mouse.isPressedIn(choice):
                if choice.name in clicked_intensity:
                    clicked_intensity.remove(choice.name)
                    choice.color = [-0.4353, 0.6392, 0.6000]
                else:
                    clicked_intensity.append(choice.name)
                    choice.color = 'red'

         # continue if next is pressed
        if mouse.isPressedIn(next_quality):
            continueRoutine = False
      End Routine:
        # restore all choices to original colour
        for choice in choices_quality:
            choice.color = 'black'
        for choice in choices_intensity:
            choice.color = [-0.4353, 0.6392, 0.6000]

        # save the clicked choices to the output
        clicked_quality = list(set(clicked_quality))
        clicked_intensity = list(set(clicked_intensity))
        thisExp.addData('descriptor', clicked_quality)
        thisExp.addData('pain_intensity', clicked_intensity)
  Routine rating_intensity
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    TextComponent intensity_text
      letterHeight = 0.06
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = En promedio, la intensidad de la sensación percibida fue:
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    SliderComponent slider_intensity
      font = Calibri
      forceEndRoutine = True
      granularity = 0
      labels = ('no lo he sentido', 'la sensación más intensa imaginable')
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = slider
      ticks = (0,100)
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    MouseComponent mouse2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable = name, color
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine ending
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    TextComponent text_ending
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        El registro está hecho,
        ¡gracias por su paciencia!
    MouseComponent mouse_ending
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine intro_RS
  Routine fixation
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = RFS_OV2024_blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 1, 'condition': 'resting state EEG - eyes open'},
      {'block': 2, 'condition': 'resting state EEG - eyes closed'},
      {'block': 3, 'condition': 'RF stimulation - left hand '},
      {'block': 4, 'condition': 'RF stimulation - left hand '},
      {'block': 5, 'condition': 'RF stimulation - left hand '},
      {'block': 6, 'condition': 'RF stimulation - right hand '},
      {'block': 7, 'condition': 'RF stimulation - right arm '},
      {'block': 8, 'condition': 'pinprick stimulaiton - right hand'}]
    Routine intro
    Routine fixation
    Routine rating_intensity
    Routine rating_quality
  LoopTerminator blocks
  Routine ending
