PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data_PsychoPy/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'S000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, 0.0902, 0.0902
  expName = OV2024_experiment
  keyboardBackend = ioHub
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Routines
  Routine fixation
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    PolygonComponent circle
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 6
      ori = 45
      shape = circle
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
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    TextComponent text_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial
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    PolygonComponent next_fixation
      fillColor = white
      ori = 90
      pos = (-0.7, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.12, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent next_fixation_text
      color = black
      letterHeight = 0.04
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      text = next
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    CodeComponent code_fixation
      Code Type = Auto->JS
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      Each Frame:
         # continue if next is pressed
        if mouse.isPressedIn(next_fixation):
            continueRoutine = False
  Routine rating_quality
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    TextComponent quality_text
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tuve una sensación ...
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    PolygonComponent nothing
      fillColor = black
      lineColor = black
      pos = (0, 0.25)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent nothing_text
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = nada
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    PolygonComponent touch
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.6, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent touch_text
      letterHeight = 0.045
      pos = (-0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de tacto
        ligero
    PolygonComponent pricking
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent pricking_text
      letterHeight = 0.05
      pos = (-0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = punzante
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    PolygonComponent tingling
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent tingling_text
      letterHeight = 0.045
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de
        cosquilleo
    PolygonComponent itchy
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.3, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent itchy_text
      letterHeight = 0.05
      pos = (0.3, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = de picazón
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    PolygonComponent warm
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.6, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent warm_text
      letterHeight = 0.05
      pos = (0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = caliente
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    PolygonComponent pinching
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.6, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent pinching_text
      letterHeight = 0.045
      pos = (-0.6, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = de pellizco
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    PolygonComponent piercing
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (-0.3, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent piercing_text
      letterHeight = 0.05
      pos = (-0.3, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = penetrante
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    PolygonComponent electric
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent electric_text
      letterHeight = 0.045
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        de
        electricidad
    PolygonComponent burning_ch
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.3, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent burning_ch_text
      letterHeight = 0.05
      pos = (0.3, -0.05)
      startVal [time (s)] = 0.0
      text = de ardor
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    PolygonComponent burning_t
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = none
      lineWidth = 0
      pos = (0.6, -0.05)
      shape = rectangle
      size = (0.25, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent burning_t_text
      letterHeight = 0.05
      pos = (0.6, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = quemante
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    TextComponent intensity_text
      letterHeight = 0.06
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Si sentía dolor, fue ...
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    PolygonComponent mild
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (-0.35, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent mild_text
      color = black
      letterHeight = 0.05
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        leve
    PolygonComponent medium
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (0.0, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent medium_text
      color = black
      letterHeight = 0.05
      pos = (0.0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        moderado
    PolygonComponent intense
      fillColor = -0.4353, 0.6392, 0.6000
      lineColor = -0.4353, 0.6392, 0.6000
      lineWidth = 0
      pos = (0.35, -0.35)
      shape = rectangle
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent intense_text
      color = black
      letterHeight = 0.05
      pos = (0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        dolor
        intenso
    PolygonComponent next_rating
      fillColor = white
      ori = 90
      pos = (0.7, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.12, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent next_rating_text
      color = black
      letterHeight = 0.04
      pos = (0.7, -0.4)
      startVal [time (s)] = 0.0
      text = next
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveParamsClickable = name, color
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_rating
      Code Type = Auto->JS
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      Begin Routine:
        clicked_quality = []
        clicked_intensity = []
      Each Frame:
        choices_quality = [nothing, touch, pricking, tingling, itchy, warm, pinching, piercing, electric, burning_ch, burning_t]
        choices_intensity = [mild, medium, intense]

        # check if the mouse is pressed in any quality box
        for choice in choices_quality:
            if mouse.isPressedIn(choice):
                clicked_quality.append(choice.name)

        # check if the mouse is pressed in any intensity box
        for choice in choices_intensity:
            if mouse.isPressedIn(choice):
                clicked_intensity.append(choice.name)

        # change box colour
        for choice in choices_quality:
            if choice.name in clicked_quality:
                choice.color = 'red'
        for choice in choices_intensity:
            if choice.name in clicked_intensity:
                choice.color = 'red'

         # continue if next is pressed
        if mouse.isPressedIn(next_rating):
            continueRoutine = False
      End Routine:
        # restore all choices to original colour
        for choice in choices_quality:
            choice.color = 'black'
        for choice in choices_intensity:
            choice.color = [-0.4353, 0.6392, 0.6000]

        # save the clicked choices to the output
        clicked_quality = list(set(clicked_quality))
        clicked_intensity = list(set(clicked_intensity))
        thisExp.addData('descriptor', clicked_quality)
        thisExp.addData('pain_intensity', clicked_intensity)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RFS_OV2024_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial': 1},
      {'trial': 2},
      {'trial': 3},
      {'trial': 4},
      {'trial': 5},
      {'trial': 6},
      {'trial': 7},
      {'trial': 8},
      {'trial': 9},
      {'trial': 10},
      {'trial': 11},
      {'trial': 12},
      {'trial': 13},
      {'trial': 14},
      {'trial': 15},
      {'trial': 16},
      {'trial': 17},
      {'trial': 18},
      {'trial': 19},
      {'trial': 20},
      {'trial': 21},
      {'trial': 22},
      {'trial': 23},
      {'trial': 24},
      {'trial': 25},
      {'trial': 26},
      {'trial': 27},
      {'trial': 28},
      {'trial': 29},
      {'trial': 30},
      {'trial': 31},
      {'trial': 32},
      {'trial': 33},
      {'trial': 34},
      {'trial': 35},
      {'trial': 36},
      {'trial': 37},
      {'trial': 38},
      {'trial': 39},
      {'trial': 40},
      {'trial': 41},
      {'trial': 42},
      {'trial': 43},
      {'trial': 44},
      {'trial': 45},
      {'trial': 46},
      {'trial': 47},
      {'trial': 48},
      {'trial': 49},
      {'trial': 50},
      {'trial': 51},
      {'trial': 52},
      {'trial': 53},
      {'trial': 54},
      {'trial': 55},
      {'trial': 56},
      {'trial': 57},
      {'trial': 58},
      {'trial': 59},
      {'trial': 60},
      {'trial': 61},
      {'trial': 62},
      {'trial': 63},
      {'trial': 64},
      {'trial': 65},
      {'trial': 66},
      {'trial': 67},
      {'trial': 68},
      {'trial': 69},
      {'trial': 70},
      {'trial': 71},
      {'trial': 72},
      {'trial': 73},
      {'trial': 74},
      {'trial': 75},
      {'trial': 76},
      {'trial': 77},
      {'trial': 78},
      {'trial': 79},
      {'trial': 80},
      {'trial': 81},
      {'trial': 82},
      {'trial': 83},
      {'trial': 84},
      {'trial': 85},
      {'trial': 86},
      {'trial': 87},
      {'trial': 88},
      {'trial': 89},
      {'trial': 90},
      {'trial': 91},
      {'trial': 92},
      {'trial': 93},
      {'trial': 94},
      {'trial': 95},
      {'trial': 96},
      {'trial': 97},
      {'trial': 98},
      {'trial': 99},
      {'trial': 100}]
    Routine fixation
    Routine rating_quality
  LoopTerminator trials
